// Loop through all open images
print("FileName, DAPI Intensity, tdTomato Intensity, EGFP Intensity, Ratio EGFP/tdT");
for (i = 1; i <= nImages; i++) {
    selectImage(i);
    imageTitle = getTitle();

    // Get the number of channels and slices (z-planes)
   Stack.getDimensions(width, height, channels, slices, frames);
	// Initialize arrays to store total intensities for each channel
    totalIntensity = newArray(0,0,0);
    // Loop through slices
    for (z = 1; z <= slices; z++) {
        // Loop through channels for the current z-slcie
        for (c = 1; c <= channels; c++) {
            Stack.setSlice(z);
            Stack.setChannel(c);
            getRawStatistics(nPixels, mean, min, max, std, histogram);
            totalIntensity[(c-1)] += mean * width * height;
        }
        
    }

    // Calculate the ratio (Channel 3 Intensity / Channel 2 Intensity)
    ratio = totalIntensity[2] / totalIntensity[1];

    // Print the result in the specified format
    print(imageTitle + ", " +  totalIntensity[0] + ", " +  totalIntensity[1] + ", " +
          totalIntensity[2] + ", " + ratio);
}